CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does containregexp "c(GFP)")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*Well(?P<Well>[0-9]).*_s(?P<Site>[0-9]*)_t(?P<Time>[0-9]*)_c(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_cGFP.")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:GFP
    Name the output image:GFP_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GFP_smooth
    Name the primary objects to be identified:DC
    Typical diameter of objects, in pixel units (Min,Max):20,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:DC
    Calculate the Zernike features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:DC
    Name the output objects:DC_CLEAN
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:DC_CLEAN
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:DC_CLEAN
    Name the output image:DC_CLEAN
    Select the color format:Grayscale
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:Yes
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    Name the output image:DC_CLEAN_OUT
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:DC_CLEAN

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:DC_CLEAN
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DC
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/ANALYSIS/N4/N4-2-13/ANALYSIS/CP/OUT/DC
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:DC_CLEAN_OUT
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DC_outline
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/ANALYSIS/N4/N4-2-13/ANALYSIS/CP/OUT/outline
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/ANALYSIS/N4/N4-2-13/ANALYSIS/CP/OUT/stats
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DC_CLEAN|Location_Center_Y,DC_CLEAN|Location_Center_X,DC_CLEAN|Location_Center_Z,DC_CLEAN|Number_Object_Number,DC_CLEAN|Parent_DC,DC_CLEAN|AreaShape_Perimeter,DC_CLEAN|AreaShape_FormFactor,DC_CLEAN|AreaShape_MaxFeretDiameter,DC_CLEAN|AreaShape_Center_Y,DC_CLEAN|AreaShape_Center_X,DC_CLEAN|AreaShape_Center_Z,DC_CLEAN|AreaShape_Area,DC_CLEAN|AreaShape_MinFeretDiameter,DC_CLEAN|AreaShape_Solidity,DC_CLEAN|AreaShape_EulerNumber,DC_CLEAN|AreaShape_Eccentricity,DC_CLEAN|AreaShape_Compactness,DC_CLEAN|AreaShape_Extent,DC_CLEAN|AreaShape_Orientation,DC_CLEAN|AreaShape_MedianRadius,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DC_
    Overwrite existing files without warning?:Yes
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